PsychoPy2experiment version="2022.2.4"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expInfo['participant_num'], 'group1_')
  Experiment info = {'participant_num': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1470, 956]
  expName = Both Tasks
  keyboardBackend = PsychToolbox
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Routines
  Routine Instructions
    TextComponent initial_instructions
      letterHeight = 0.051
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Marble Jar Exeriment.

        During this experiment, you will see 2 marble jars.

        On half of the trials, you will be asked to pick which jar you want a marble to be sampled from.

        On the other half of the trials, you'll be asked to remember if the jar is the same or different.


        To continue, press the space bar.
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sample_marble
    CodeComponent random_marble
      Code Type = Py
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      Before Experiment:
        import random
      Begin Experiment:
        gainsTotal = list()
      Begin Routine:
        #gainsRound = 0
        if marble_color == -1:
            continueRoutine = False

        if task != "trial_JarSelection":
            #specify points associated with each color
            for marble_color in color_pts_dict:
                if (key_resp_trials_JarSelection.keys == 'j'): #left jar
                    marble_color = random.choice(Jar2_Colors)

                if (key_resp_trials_JarSelection.keys== 'f'): #right jar
                    marble_color = random.choice(Jar1_Colors)

            points = colors_pts_dict[marble_color]

            gainsTotal.append(points) #update total points (feedback calculator)

            thisExp.addData('marble color sampled', marble_color)
            thisExp.addData('marble points', points)
      End Routine:
        #update total points
        #gainsRound = gainsRound + color_pts_dict[marble_color]
        #gainsTotal.append(points)
    TextComponent print_marble_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $marble_color
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    TextComponent print_marble_points
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $points
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every frame] = $gainsTotal
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  Routine trial_JarSelection
    ImageComponent jar1
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 2.0
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      text:
        JAR SELECTION TASK
        Choose a jar of marbles

        Jar 1: Press F Key
        Jar 2: Press J Key
    KeyboardComponent key_resp_trials_JarSelection
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    ImageComponent jar2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent MarbleValues
      image = Screen Shot 2023-02-08 at 4.37.32 PM.png
      pos = (0, 0.35)
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent check_task
      Code Type = Py
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      Each Frame:
        if task != "trial_JarSelection":
            continueRoutine = False
            if continueRoutine == False:
                marble_color = -1
  Routine Ready_to_begin
    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Ready to begin the experiment?


        Press the space bar to begin.
    KeyboardComponent key_resp_trial_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_ChangeDetection
    ImageComponent jar1_2
      image [set every repeat] = $Jar1
      pos = (-0.25, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Same_or_Different
      letterHeight = 0.1
      pos = (-0.28, 0)
      startVal [time (s)] = 3.0
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      text:
        Is this jar the same or different?

        Press
        'f' for SAME
        'j' for DIFFERENT
    KeyboardComponent key_resp_trials
      allowedKeys = 'f', 'j'
      correctAns = $Change_Detection_Key
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      storeCorrect = True
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    ImageComponent jar2_2
      image [set every repeat] = $Jar2
      pos = (0.45, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent changedetection
      image [set every repeat] = $Jar3
      pos = (0.45, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
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    TextComponent blankscreen
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    CodeComponent check_task_2
      Code Type = Py
      Each Frame:
        if task != "trial_ChangeDetection":
            continueRoutine = False
  Routine Feedback_ChangeDetection
    CodeComponent feedback
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'You did not answer in time. You got 0 points.'
        fb_col = 'black'

        try:
            if key_resp_trials.corr:
                fb_text = 'Correct! You got 1 point.'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect. You got 0 points.'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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    CodeComponent check_task_4
      Code Type = Py
      Each Frame:
        if task != "trial_ChangeDetection":
            continueRoutine = False
  Routine Colors_points
    CodeComponent color_points_code
      Code Type = Py
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      Before Experiment:
        import random

        colors = ["red", "green", "purple"]
        points = [3, 4, 2]

        #shuffle colors
        random.shuffle(colors)


        color_pts_dict = {colors[i]: points[i] for i in range(len(colors))}
  Routine color_points
    CodeComponent color_pts_code
      Code Type = Py
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      Begin Experiment:
        import random

        colors = ["green", "purple", "red"]
        points = [2, 3, 4]

        #shuffle colors
        random.shuffle(colors)


        color_pts_dict = {colors[i]: points[i] for i in range(len(colors))}
    TextComponent color_pts
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = $color_pts_dict
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Flow
  Routine Instructions
  Routine Ready_to_begin
  Routine color_points
  LoopInitiator which_task loopType="TrialHandler"
    conditionsFile = BothTasks_ConditionFile.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_0.jpg', 'Jar1_Colors': ['red', 'green', 'purple', 'green', 'red', 'red', 'red', 'green', 'red'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_3.jpg', 'Jar2_Colors': ['red', 'green', 'green', 'purple', 'purple', 'green', 'green', 'red', 'purple'], 'Jar3_right_or_left': 'left', 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar3_left_same_0.jpg', 'same_or_different': 'same', 'Change_Detection_Key': 'f', 'task': 'trial_ChangeDetection'},
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_1.jpg', 'Jar1_Colors': ['purple', 'green', 'green', 'red', 'red', 'red', 'purple', 'purple', 'red'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_4.jpg', 'Jar2_Colors': ['red', 'purple', 'red', 'red', 'red', 'green', 'purple', 'purple', 'green'], 'Jar3_right_or_left': 'left', 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar3_left_different_1.jpg', 'same_or_different': 'different', 'Change_Detection_Key': 'j', 'task': 'trial_JarSelection'},
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_2.jpg', 'Jar1_Colors': ['purple', 'green', 'green', 'purple', 'purple', 'purple', 'green', 'red', 'red'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_5.jpg', 'Jar2_Colors': ['purple', 'red', 'red', 'red', 'green', 'green', 'red', 'purple', 'green'], 'Jar3_right_or_left': 'left', 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar3_left_same_2.jpg', 'same_or_different': 'same', 'Change_Detection_Key': 'f', 'task': 'trial_JarSelection'},
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_3.jpg', 'Jar1_Colors': ['green', 'purple', 'red', 'red', 'red', 'red', 'green', 'red', 'red'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_0.jpg', 'Jar2_Colors': ['red', 'green', 'red', 'green', 'red', 'purple', 'red', 'red', 'purple'], 'Jar3_right_or_left': 'right', 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar3_right_different_0.jpg', 'same_or_different': 'different', 'Change_Detection_Key': 'j', 'task': 'trial_ChangeDetection'}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
    Routine trial_JarSelection
    Routine sample_marble
    Routine trial_ChangeDetection
    Routine Feedback_ChangeDetection
  LoopTerminator which_task
