PsychoPy2experiment version="2022.2.4"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expInfo['participant_num'], 'group1_')
  Experiment info = {'participant_num': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1470, 956]
  expName = Change Decision Task
  keyboardBackend = PsychToolbox
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Routines
  Routine Instructions
    TextComponent initial_instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Change Detection Task.

        During this experiment, you will see 2 pictures, and then a black screen.

        Your task is to remember whether these 2 pictures were the same or different.


        To continue, press the space bar.
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_instructions_2
    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Ready to begin the experiment?

        Press 'f' if the stimuli are the SAME.

        Press 'j' if the stimuli are DIFFERENT.

        Press the space bar to begin.
    KeyboardComponent key_resp_trial_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent jar1
      image [set every repeat] = $Jar1
      pos = (-0.25, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text
      letterHeight = 0.1
      pos = (-0.28, 0)
      startVal [time (s)] = 3.0
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      text:
        Is this jar the same or different?

        Press
        'f' for SAME
        'j' for DIFFERENT
    KeyboardComponent key_resp_trials
      allowedKeys = 'f', 'j'
      correctAns = $Key
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      storeCorrect = True
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    ImageComponent jar2
      image [set every repeat] = $Jar2
      pos = (0.45, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent changedetection
      image [set every repeat] = $Jar3
      pos = (0.45, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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  Routine Feedback
    CodeComponent feedback
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'You did not answer in time. You got 0 points.'
        fb_col = 'black'

        try:
            if key_resp_trials.corr:
                fb_text = 'Correct! You got 1 point.'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect. You got 0 points.'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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Flow
  Routine Instructions
  Routine trial_instructions_2
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = ConditionFile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Jar1': 'Stimuli/marblejar_left_2.jpg', 'Jar2': 'Stimuli/marblejar2.jpg', 'Jar3_right_or_left': 'left', 'Jar3': 'Stimuli/marblejar3_left_different_2_.jpg', 'Key': 'j'},
      {'Jar1': 'Stimuli/marblejar5.jpg', 'Jar2': 'Stimuli/marblejar_right_2.jpg', 'Jar3_right_or_left': 'right', 'Jar3': 'Stimuli/marblejar3_right_different_2_.jpg', 'Key': 'j'},
      {'Jar1': 'Stimuli/marblejar_left_0.jpg', 'Jar2': 'Stimuli/marblejar0.jpg', 'Jar3_right_or_left': 'left', 'Jar3': 'Stimuli/marblejar3_left_same_0_.jpg', 'Key': 'f'},
      {'Jar1': 'Stimuli/marblejar3.jpg', 'Jar2': 'Stimuli/marblejar_right_0.jpg', 'Jar3_right_or_left': 'right', 'Jar3': 'Stimuli/marblejar3_right_different_0_.jpg', 'Key': 'j'},
      {'Jar1': 'Stimuli/marblejar4.jpg', 'Jar2': 'Stimuli/marblejar_right_1.jpg', 'Jar3_right_or_left': 'right', 'Jar3': 'Stimuli/marblejar3_right_same_1_.jpg', 'Key': 'f'},
      {'Jar1': 'Stimuli/marblejar_left_1.jpg', 'Jar2': 'Stimuli/marblejar1.jpg', 'Jar3_right_or_left': 'left', 'Jar3': 'Stimuli/marblejar3_left_different_1_.jpg', 'Key': 'j'}]
    Routine trial
    Routine Feedback
  LoopTerminator Trials
