PsychoPy2experiment version="2022.2.4"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expInfo['participant_num'], 'group1_')
  Experiment info = {'participant_num': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1470, 956]
  expName = Both Tasks
  keyboardBackend = PsychToolbox
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Routines
  Routine Instructions
    TextComponent initial_instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Marble Jar Exeriment.

        During this experiment, you will see 2 marble jars.

        On half of the trials, you will be asked to pick which jar you want a marble to be sampled from.

        On the other half of the trials, you'll be asked to remember if the jar is the same or different.


        To continue, press the space bar.
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_instructions_2
    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Ready to begin the experiment?


        Press the space bar to begin.
    KeyboardComponent key_resp_trial_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent jar1
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 2.0
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      text:
        JAR SELECTION TASK
        Choose a jar of marbles

        Jar 1: Press F Key
        Jar 2: Press J Key
    KeyboardComponent key_resp_trials
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    ImageComponent jar2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent MarbleValues
      image = Screen Shot 2023-02-08 at 4.37.32 PM.png
      pos = (0, 0.35)
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine sample_marble
    CodeComponent random_marble
      Code Type = Py
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      Before Experiment:
        import random
      Begin Routine:
        if (key_resp_trials.keys == 'j'): #left jar
           marble_color = random.choice(Jar2_Colors)


        if (key_resp_trials.keys == 'f'): #right jar
           marble_color = random.choice(Jar1_Colors)

        #specify points associated with each color
        if (marble_color =="red"):
            marble_points = 2
        elif (marble_color == "green"):
            marble_points = 3
        else: #marble color is purple
            marble_points = 4
    TextComponent print_marble_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $marble_color
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    TextComponent print_marble_points
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $marble_points
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  Routine which_trial
    CodeComponent code
      Code Type = Py
      Before Experiment:
        import random
      Begin Routine:
        task = randint(0, 1)
        #if task == 0, go to marble selection task
        #if task == 1, go to change detection task
Flow
  Routine Instructions
  Routine trial_instructions_2
  Routine which_trial
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = ConditionFile_JarSelection.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar10.jpg', 'Jar1_Colors': ['green', 'green', 'red', 'red', 'purple', 'green', 'green', 'green', 'purple'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar0.jpg', 'Jar2_Colors': ['green', 'red', 'red', 'red', 'green', 'green', 'green', 'red', 'green']},
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar11.jpg', 'Jar1_Colors': ['red', 'green', 'purple', 'green', 'red', 'green', 'green', 'red', 'red'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar1.jpg', 'Jar2_Colors': ['green', 'red', 'red', 'red', 'green', 'green', 'red', 'green', 'red']},
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar9.jpg', 'Jar1_Colors': ['red', 'green', 'red', 'red', 'red', 'red', 'green', 'red', 'red'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar5.jpg', 'Jar2_Colors': ['green', 'red', 'green', 'red', 'green', 'green', 'green', 'red', 'green']},
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar8.jpg', 'Jar1_Colors': ['green', 'green', 'red', 'red', 'green', 'red', 'green', 'red', 'red'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Jar Selection Task/Stimuli/marblejar4.jpg', 'Jar2_Colors': ['green', 'green', 'red', 'green', 'green', 'green', 'red', 'green', 'purple']}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
    Routine trial
    Routine sample_marble
  LoopTerminator Trials
