PsychoPy2experiment version="2022.2.4"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expInfo['participant_num'], 'group1_')
  Experiment info = {'participant_num': '', 'which_group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1470, 956]
  expName = Both Tasks - practice trials
  keyboardBackend = PsychToolbox
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Routines
  Routine Instructions
    TextComponent initial_instructions
      letterHeight = 0.051
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Marble Jar Exeriment.

        During this experiment, you will see 2 marble jars.

        On half of the trials, you will randomly do a Jar Selection Task where you pick which jar you want a marble to be sampled from.

        On the other half of the trials, you'll do a Change Detection Task where you'll be asked to remember if the jar is the same or different.


        Press space to continue
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine color_points
    CodeComponent color_pts
      Code Type = Py
      Begin Experiment:
        import random
        #randomize colors to points mappings
        colors = ["green", "purple", "darkorange"]
        color_points = [2, 3, 4]

        #shuffle colors
        random.shuffle(colors)

        color_pts_dict = {colors[i]: color_points[i] for i in range(len(colors))}
        thisExp.addData('Color Points Dictionary', color_pts_dict)

        order = ''
        orange = color_pts_dict['darkorange']
        green = color_pts_dict['green']
        purple = color_pts_dict['purple']

        if orange < green < purple:
            order = 'orange_green_purple'
        if orange < purple < green:
            order = 'orange_purple_green'
        if purple < orange < green:
            order = 'purple_orange_green'
        if purple < green < orange:
            order = 'purple_green_orange'
        if green < orange < purple:
            order = 'green_orange_purple'
        if green < purple < orange:
            order = 'green_purple_orange'

        value_path = '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Marble Jar Values/' + order + '.png'
    TextComponent Print_color_pts_dict
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = $color_pts_dict
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  Routine total_points
    TextComponent both_tasks_feedback
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $"Congrats on completing the Marble Jar Task! You got " + str(gainsTotal) + " points!!!"
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    CodeComponent TOTAL_POINTS
      Code Type = Py
      Begin Routine:
        thisExp.addData('TOTAL POINTS', gainsTotal)
  Routine practice_instructions
    TextComponent practice_instruc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next section, you will complete PRACTICE trials. Data from these trials will not be collected.


        Press the space bar to begin.
    KeyboardComponent key_resp_practice_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_JarSelection
    ImageComponent jar1
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.0
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      text:
        JAR SELECTION TASK
        Choose a jar of marbles

        Jar 1: Press F Key
        Jar 2: Press J Key
    KeyboardComponent key_resp_trials_JarSelection
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      storeCorrect = True
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    ImageComponent jar2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent MarbleValues
      image = $value_path
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent check_task
      Code Type = Py
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      Each Frame:
        if task != "trial_JarSelection":
            marble_color = -1
            marble_points = 0
            continueRoutine = False
    CodeComponent keyresponse_time_2
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials.frameNStart = frameN  # exact frame index
        key_resp_trials.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            marble_color = 0
            continueRoutine = False
  Routine trials_sample_marble
    CodeComponent random_marble
      Code Type = Py
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      Begin Experiment:
        gainsTotal = 0
      Begin Routine:
        if marble_color == 0:
            points = 0



        if (key_resp_trials_JarSelection.keys == 'j'): #left jar
            marble_color = random.choice(Jar2_Colors)
        if (key_resp_trials_JarSelection.keys== 'f'): #right jar
            marble_color = random.choice(Jar1_Colors)


        if marble_color == 'darkorange':
            #marble_points = 2
            marble_points = color_pts_dict['darkorange']
        if marble_color == 'green':
            #marble_points = 3
            marble_points = color_pts_dict['green']
        if marble_color == 'purple':
            #marble_points = 4
            marble_points = color_pts_dict['purple']

        gainsTotal = gainsTotal + marble_points
        thisExp.addData('Marble color', marble_color)
        thisExp.addData('Marble points', marble_points)
      Each Frame:
        if task != "trial_JarSelection":
            continueRoutine = False
      End Routine:
        #update total points
        #gainsRound = gainsRound + color_pts_dict[marble_color]
        #gainsTotal.append(points)
    TextComponent print_marble_points
      letterHeight = 0.07
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $"You got " + str(marble_points) + " points"
    PolygonComponent marble
      fillColor [set every repeat] = $marble_color
      lineColor [set every repeat] = $marble_color
      pos = (0.00, 0.00)
      saveStartStop = False
      shape = circle
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine trials_ChangeDetection
    ImageComponent jar1_2
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Same_or_Different
      letterHeight = 0.07
      pos [set every repeat] = [Jar3_text_position_X, Jar3_text_position_Y]
      saveStartStop = False
      startVal [time (s)] = 3.0
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      text:
        Is this jar the same or different?

        Press
        'f' for SAME
        'j' for DIFFERENT
    KeyboardComponent key_resp_trials
      allowedKeys = 'f', 'j'
      correctAns = $Change_Detection_Key
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 3.0
      storeCorrect = True
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    ImageComponent jar2_2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent changedetection
      image [set every repeat] = $Jar3
      pos [set every repeat] = [Jar3_position_X, Jar3_position_Y]
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 3
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    TextComponent blankscreen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    CodeComponent check_task_2
      Code Type = Py
      Each Frame:
        if task != "trial_ChangeDetection":
            continueRoutine = False
    ImageComponent MarbleValues_2
      image = $value_path
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent keyresponse_time
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials.frameNStart = frameN  # exact frame index
        key_resp_trials.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            continueRoutine = False
  Routine trials_Feedback_ChangeDetection
    CodeComponent feedback
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.

        if (key_resp_trials.keys == 'f') or (key_resp_trials.keys == 'j'):
            if key_resp_trials.corr:
                fb_text = 'Correct! You got 1 point.'
                gainsTotal += 1
                fb_col = 'green'
            else:
                fb_text = 'Incorrect. You got 0 points.'
                fb_col = 'red'
                gainsTotal += 0
        else:
            fb_text = 'You did not answer in time. You got 0 points.'
            fb_col = 'white'
            gainsTotal += 0
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $fb_text
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    CodeComponent check_task_4
      Code Type = Py
      Each Frame:
        if task != "trial_ChangeDetection":
            continueRoutine = False
  Routine practice_JarSelection
    ImageComponent jar1_3
      image [set every repeat] = $practice_Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.0
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      text:
        JAR SELECTION TASK
        Choose a jar of marbles

        Jar 1: Press F Key
        Jar 2: Press J Key
    KeyboardComponent key_resp_practice_JarSelection
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
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    ImageComponent jar2_3
      image [set every repeat] = $practice_Jar2
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent MarbleValues_3
      image = $value_path
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent check_task_3
      Code Type = Py
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      Each Frame:
        if practice_task != "practice_JarSelection":
            marble_color = -1
            marble_points = 0
            continueRoutine = False
    CodeComponent keyresponse_time_3
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_practice_JarSelection.frameNStart = frameN  # exact frame index
        key_resp_practice_JarSelection.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            marble_color = 0
            continueRoutine = False
  Routine practice_sample_marble
    CodeComponent random_marble_2
      Code Type = Py
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      Begin Experiment:
        #gainsTotal = 0
      Begin Routine:
        if marble_color == 0:
            points = 0

        if (key_resp_practice_JarSelection.keys == 'j'): #left jar
            marble_color = random.choice(practice_Jar2_Colors)
        if (key_resp_practice_JarSelection.keys== 'f'): #right jar
            marble_color = random.choice(practice_Jar1_Colors)


        if marble_color == 'darkorange':
            #marble_points = 2
            marble_points = color_pts_dict['darkorange']
        if marble_color == 'green':
            #marble_points = 3
            marble_points = color_pts_dict['green']
        if marble_color == 'purple':
            #marble_points = 4
            marble_points = color_pts_dict['purple']

        #gainsTotal = gainsTotal + marble_points
        #thisExp.addData('Marble color', marble_color)
        #thisExp.addData('Marble points', marble_points)
      Each Frame:
        if practice_task != "practice_JarSelection":
            continueRoutine = False
    TextComponent print_marble_points_2
      letterHeight = 0.07
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $"You got " + str(marble_points) + " points"
    PolygonComponent marble_2
      fillColor [set every repeat] = $marble_color
      lineColor [set every repeat] = $marble_color
      pos = (0.00, 0.00)
      saveStartStop = False
      shape = circle
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine practice_ChangeDetection
    ImageComponent jar1_4
      image [set every repeat] = $practice_Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Same_or_Different_2
      letterHeight = 0.07
      pos [set every repeat] = [practice_Jar3_text_position_X, practice_Jar3_text_position_Y]
      saveStartStop = False
      startVal [time (s)] = 3.0
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      text:
        Is this jar the same or different?

        Press
        'f' for SAME
        'j' for DIFFERENT
    KeyboardComponent key_resp_trials_2
      allowedKeys = 'f', 'j'
      correctAns = $practice_Change_Detection_Key
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 3.0
      storeCorrect = True
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    ImageComponent jar2_4
      image [set every repeat] = $practice_Jar2
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent changedetection_2
      image [set every repeat] = $practice_Jar3
      pos [set every repeat] = [practice_Jar3_position_X, practice_Jar3_position_Y]
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 3
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    TextComponent blankscreen_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    CodeComponent check_task_5
      Code Type = Py
      Each Frame:
        if practice_task != "practice_ChangeDetection":
            continueRoutine = False
    ImageComponent MarbleValues_4
      image = $value_path
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent keyresponse_time_4
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials_2.frameNStart = frameN  # exact frame index
        key_resp_trials_2.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            continueRoutine = False
  Routine practice_change_feedback
    CodeComponent feedback_2
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.

        if (key_resp_trials_2.keys == 'f') or (key_resp_trials_2.keys == 'j'):
            if key_resp_trials_2.corr:
                fb_text = 'Correct! You got 1 point.'
                #gainsTotal += 1
                fb_col = 'green'
            else:
                fb_text = 'Incorrect. You got 0 points.'
                fb_col = 'red'
                #gainsTotal += 0
        else:
            fb_text = 'You did not answer in time. You got 0 points.'
            fb_col = 'white'
            #gainsTotal += 0
      Each Frame:
        if practice_task != "practice_ChangeDetection":
            continueRoutine = False
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $fb_text
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  Routine ready_to_begin
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now it is time to begin the experiment.

        Scores from these trials will be collected.


        Press the space bar to begin.
    KeyboardComponent key_resp_ready
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine color_points
  Routine practice_instructions
  LoopInitiator practice_which_task loopType="TrialHandler"
    conditionsFile = PRACTICE_ConditionFile.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'practice_Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli_Practice/marblejar0.jpg', 'practice_Jar1_Colors': ['darkorange', 'darkorange', 'darkorange', 'purple', 'darkorange', 'green', 'purple', 'darkorange', 'darkorange'], 'practice_Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli_Practice/marblejar1.jpg', 'practice_Jar2_Colors': ['green', 'darkorange', 'purple', 'green', 'darkorange', 'purple', 'green', 'green', 'green'], 'practice_Jar3_right_or_left': 'left', 'practice_Jar3_text_position_X': 0.25, 'practice_Jar3_text_position_Y': 0, 'practice_Jar3_position_X': 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,
      {'practice_Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli_Practice/marblejar2.jpg', 'practice_Jar1_Colors': ['darkorange', 'green', 'green', 'green', 'green', 'green', 'darkorange', 'green', 'green'], 'practice_Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli_Practice/marblejar3.jpg', 'practice_Jar2_Colors': ['purple', 'darkorange', 'green', 'darkorange', 'darkorange', 'green', 'green', 'purple', 'green'], 'practice_Jar3_right_or_left': 'left', 'practice_Jar3_text_position_X': 0.25, 'practice_Jar3_text_position_Y': 0, 'practice_Jar3_position_X': -0.5, 'practice_Ja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,
      {'practice_Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli_Practice/marblejar4.jpg', 'practice_Jar1_Colors': ['darkorange', 'purple', 'purple', 'darkorange', 'purple', 'purple', 'darkorange', 'darkorange', 'green'], 'practice_Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli_Practice/marblejar5.jpg', 'practice_Jar2_Colors': ['darkorange', 'purple', 'purple', 'darkorange', 'purple', 'purple', 'darkorange', 'darkorange', 'green'], 'practice_Jar3_right_or_left': 'right', 'practice_Jar3_text_position_X': -0.25, 'practice_Jar3_text_position_Y': 0, 'practice_Jar3_position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,
      {'practice_Jar1': None, 'practice_Jar1_Colors': None, 'practice_Jar2': None, 'practice_Jar2_Colors': None, 'practice_Jar3_right_or_left': None, 'practice_Jar3_text_position_X': None, 'practice_Jar3_text_position_Y': None, 'practice_Jar3_position_X': None, 'practice_Jar3_position_Y': None, 'practice_Jar3': None, 'practice_same_or_different': None, 'practice_Change_Detection_Key': None, 'practice_task': None}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
    Routine practice_JarSelection
    Routine practice_sample_marble
    Routine practice_ChangeDetection
    Routine practice_change_feedback
  LoopTerminator practice_which_task
  Routine ready_to_begin
  LoopInitiator which_task loopType="TrialHandler"
    conditionsFile = BothTasks_ConditionFile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_0.jpg', 'Jar1_Colors': ['green', 'darkorange', 'darkorange', 'green', 'darkorange', 'darkorange', 'darkorange', 'green', 'darkorange'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_3.jpg', 'Jar2_Colors': ['darkorange', 'darkorange', 'purple', 'darkorange', 'green', 'darkorange', 'darkorange', 'green', 'green'], 'Jar3_right_or_left': 'left', 'Jar3_text_position': (0.25, 0), 'Jar3_position': (-0.5, 0), 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_s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,
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_1.jpg', 'Jar1_Colors': ['green', 'purple', 'darkorange', 'purple', 'green', 'darkorange', 'green', 'darkorange', 'purple'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_4.jpg', 'Jar2_Colors': ['darkorange', 'darkorange', 'purple', 'green', 'green', 'darkorange', 'purple', 'green', 'darkorange'], 'Jar3_right_or_left': 'left', 'Jar3_text_position': (0.25, 0), 'Jar3_position': (-0.5, 0), 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_different_1.jpg', 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,
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_2.jpg', 'Jar1_Colors': ['darkorange', 'darkorange', 'green', 'purple', 'purple', 'purple', 'darkorange', 'purple', 'purple'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_5.jpg', 'Jar2_Colors': ['green', 'green', 'darkorange', 'darkorange', 'purple', 'darkorange', 'darkorange', 'purple', 'green'], 'Jar3_right_or_left': 'left', 'Jar3_text_position': (0.25, 0), 'Jar3_position': (-0.5, 0), 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_different_2.jpg'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,
      {'Jar1': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_left_3.jpg', 'Jar1_Colors': ['purple', 'green', 'darkorange', 'darkorange', 'darkorange', 'darkorange', 'darkorange', 'green', 'darkorange'], 'Jar2': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_0.jpg', 'Jar2_Colors': ['darkorange', 'purple', 'purple', 'green', 'green', 'darkorange', 'green', 'green', 'darkorange'], 'Jar3_right_or_left': 'right', 'Jar3_text_position': (-0.25, 0), 'Jar3_position': (0.5, 0), 'Jar3': '/Users/rochellekaper/Desktop/AdaCog/Both Tasks/Stimuli/marblejar_right_differen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
    Routine trials_JarSelection
    Routine trials_sample_marble
    Routine trials_ChangeDetection
    Routine trials_Feedback_ChangeDetection
  LoopTerminator which_task
  Routine total_points
