PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1470, 956]
  expName = green_orange_purple
  keyboardBackend = PsychToolbox
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Routines
  Routine Instructions
    TextComponent initial_instructions
      letterHeight = 0.051
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Marble Jar Exeriment.

        During this experiment, you will see 2 marble jars.

        On half of the trials, you will randomly do a Jar Selection Task where you pick which jar you want a marble to be sampled from.

        On the other half of the trials, you'll do a Change Detection Task where you'll be asked to remember if the jar is the same or different.


        Press space to continue
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ready_to_begin
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ready to begin the experiment? Scores from these trials will be collected.


        Press the space bar to begin.
    KeyboardComponent key_resp_ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_JarSelection
    ImageComponent jar1
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.5
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      text:
        JAR SELECTION TASK
        Choose a jar of marbles

        Jar 1: Press F Key
        Jar 2: Press J Key
    KeyboardComponent key_resp_trials_JarSelection
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.5
      storeCorrect = True
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    ImageComponent jar2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent MarbleValues
      image = green_orange_purple.png
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent check_task
      Code Type = Py
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      Each Frame:
        if task != "trial_JarSelection":
            marble_color = -1
            marble_points = 0
            continueRoutine = False
    CodeComponent keyresponse_time_2
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials.frameNStart = frameN  # exact frame index
        key_resp_trials.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            marble_color = 0
            continueRoutine = False
  Routine trials_sample_marble
    CodeComponent random_marble
      Code Type = Py
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      Begin Experiment:
        gainsTotal = 0
      Begin Routine:
        if marble_color == 0:
            points = 0



        if (key_resp_trials_JarSelection.keys == 'j'): #left jar
            marble_color = random.choice(Jar2_Colors)
        if (key_resp_trials_JarSelection.keys== 'f'): #right jar
            marble_color = random.choice(Jar1_Colors)


        if marble_color == 'green':
            marble_points = 2
        if marble_color == 'darkorange':
            marble_points = 3
        if marble_color == 'purple':
            marble_points = 4

        gainsTotal = gainsTotal + marble_points
        thisExp.addData('Marble color', marble_color)
        thisExp.addData('Marble points', marble_points)
      Each Frame:
        if task != "trial_JarSelection":
            continueRoutine = False
      End Routine:
        #update total points
        #gainsRound = gainsRound + color_pts_dict[marble_color]
        #gainsTotal.append(points)
    TextComponent print_marble_points
      letterHeight = 0.07
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $"You got " + str(marble_points) + " points"
    PolygonComponent marble
      fillColor [set every repeat] = $marble_color
      lineColor [set every repeat] = $marble_color
      pos = (0.00, 0.00)
      saveStartStop = False
      shape = circle
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine trials_ChangeDetection
    ImageComponent jar1_2
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Same_or_Different
      letterHeight = 0.07
      pos [set every repeat] = [Jar3_text_position_X, Jar3_text_position_Y]
      saveStartStop = False
      startVal [time (s)] = 3.0
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      text:
        Is this jar the same or different?

        Press
        'f' for SAME
        'j' for DIFFERENT
    KeyboardComponent key_resp_trials
      allowedKeys = 'f', 'j'
      correctAns = $Change_Detection_Key
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 3.0
      storeCorrect = True
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    ImageComponent jar2_2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent changedetection
      image [set every repeat] = $Jar3
      pos [set every repeat] = [Jar3_position_X, Jar3_position_Y]
      size = (0.5, 0.5)
      startVal [time (s)] = 3
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    TextComponent blankscreen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    CodeComponent check_task_2
      Code Type = Py
      Each Frame:
        if task != "trial_ChangeDetection":
            continueRoutine = False
    ImageComponent MarbleValues_2
      image = green_orange_purple.png
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent keyresponse_time
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials.frameNStart = frameN  # exact frame index
        key_resp_trials.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            continueRoutine = False
  Routine trials_Feedback_ChangeDetection
    CodeComponent feedback
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.

        if (key_resp_trials.keys == 'f') or (key_resp_trials.keys == 'j'):
            if key_resp_trials.corr:
                fb_text = 'Correct! You got 3 points.'
                gainsTotal += 3
                fb_col = 'green'
            else:
                fb_text = 'Incorrect. You got 0 points.'
                fb_col = 'white'
                gainsTotal += 0
        else:
            fb_text = 'You did not answer in time. You got 0 points.'
            fb_col = 'black'
            gainsTotal += 0
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $fb_text
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    CodeComponent check_task_4
      Code Type = Py
      Each Frame:
        if task != "trial_ChangeDetection":
            continueRoutine = False
  Routine total_points
    TextComponent both_tasks_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $"Congrats on completing the Marble Jar Task! You got " + str(gainsTotal) + " points!"
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    CodeComponent TOTAL_POINTS
      Code Type = Py
      Begin Routine:
        thisExp.addData('TOTAL POINTS', gainsTotal)
Flow
  Routine Instructions
  Routine ready_to_begin
  LoopInitiator which_task loopType="TrialHandler"
    conditionsFile = Condition_File_green_orange_purple.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Jar1': './Stimuli/marblejar_29points0.jpg', 'Jar1_Colors': ['darkorange', 'purple', 'darkorange', 'darkorange', 'purple', 'darkorange', 'purple', 'darkorange', 'green'], 'Jar2': './Stimuli/marblejar_29points20.jpg', 'Jar2_Colors': ['green', 'darkorange', 'darkorange', 'green', 'purple', 'purple', 'purple', 'darkorange', 'purple'], 'Jar3_right_or_left': 'right', 'Jar3_text_position_X': -0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': 0.5, 'Jar3_position_Y': 0, 'Jar3': './Stimuli/marblejar_29points20.jpg', 'same_or_different': 'same', 'Change_Detection_Key': 'f', 'task': 'task_JarSelectio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,
      {'Jar1': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points1.jpg', 'Jar1_Colors': ['darkorange', 'darkorange', 'purple', 'darkorange', 'purple', 'purple', 'darkorange', 'green', 'darkorange'], 'Jar2': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points21.jpg', 'Jar2_Colors': ['darkorange', 'purple', 'purple', 'darkorange', 'darkorange', 'green', 'darkorange', 'purple', 'darkorange'], 'Jar3_right_or_left': 'right', 'Jar3_text_position_X': -0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': 0.5, 'Jar3_position_Y': 0, 'Jar3': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29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,
      {'Jar1': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points2.jpg', 'Jar1_Colors': ['purple', 'green', 'darkorange', 'darkorange', 'green', 'purple', 'darkorange', 'purple', 'purple'], 'Jar2': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points22.jpg', 'Jar2_Colors': ['purple', 'purple', 'darkorange', 'darkorange', 'darkorange', 'darkorange', 'green', 'purple', 'darkorange'], 'Jar3_right_or_left': 'right', 'Jar3_text_position_X': -0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': 0.5, 'Jar3_position_Y': 0, 'Jar3': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points42.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,
      {'Jar1': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points3.jpg', 'Jar1_Colors': ['darkorange', 'green', 'purple', 'darkorange', 'purple', 'purple', 'darkorange', 'purple', 'green'], 'Jar2': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points23.jpg', 'Jar2_Colors': ['darkorange', 'darkorange', 'purple', 'darkorange', 'green', 'purple', 'darkorange', 'purple', 'darkorange'], 'Jar3_right_or_left': 'right', 'Jar3_text_position_X': -0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': 0.5, 'Jar3_position_Y': 0, 'Jar3': '/Both Tasks/green_orange_purple/Stimuli/marblejar_29points43.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
    Routine trials_JarSelection
    Routine trials_sample_marble
    Routine trials_ChangeDetection
    Routine trials_Feedback_ChangeDetection
  LoopTerminator which_task
  Routine total_points
