PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['anonymous_participant_id'], expName, expInfo['group'])
  Experiment info = {'anonymous_participant_id': '', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = orange_purple_green
  keyboardBackend = PsychToolbox
  logging level = data
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Routines
  Routine exp_name3
    CodeComponent exp_name
      Code Type = Py
      Before Experiment:
        exp_name = 'orange_purple_green'
  Routine color_pts
    CodeComponent color_points_dict
      Code Type = Py
      Before Experiment:
        colors = []
        color_points = [2, 3, 4]

        if exp_name == 'orange_green_purple':
            colors = ["darkorange", "green", "purple"]
        if exp_name == 'orange_purple_green':
            colors = ["darkorange", "purple", "green"]
        if exp_name == 'purple_orange_green':
            colors = ["purple", "darkorange", "green"]
        if exp_name =='purple_green_orange':
            colors = ["purple", "green", "darkorange"]
        if exp_name == 'green_orange_purple':
            colors = ["green", "darkorange", "purple"]
        if exp_name == 'green_purple_orange':
            colors = ["green", "purple", "darkorange"]

        color_pts_dict = {colors[i]: color_points[i] for i in range(len(colors))}
        #thisExp.addData('Color Points Dictionary', color_pts_dict)
        orange = color_pts_dict['darkorange']
        green = color_pts_dict['green']
        purple = color_pts_dict['purple']
  Routine value_path
    CodeComponent code
      Code Type = Py
      Before Experiment:
        valuepath = 'C:/Users/kaperr.WIN/Desktop/Marble_Jar_Paradigm/' + exp_name  + '/' + exp_name + '.png'

        #C:\Users\kaperr.WIN\Desktop\Marble_Jar_Paradigm\green_orange_purple\green_orange_purple.png
  Routine Instructions_1
    TextComponent initial_instructions
      letterHeight = 0.051
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Marble Jar Exeriment.

        During this experiment, you will see 2 marble jars.

        On half of the trials, you will randomly do a Jar Selection Task where you pick which jar you want a marble to be sampled from.

        On the other half of the trials, you'll do a Change Detection Task where you'll be asked to remember if the jar is the same or different.


        Press space to continue
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instructions1
    TextComponent practice_instruc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next section, you will complete practice trials. Data from these trials will not be collected.


        Press the space bar to begin.
    KeyboardComponent key_resp_practice_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_JarSelection1
    ImageComponent jar1_3
      image [set every repeat] = $practice_Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 3
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      text:
        JAR SELECTION TASK
        Choose a jar of marbles

        Jar 1: Press F Key
        Jar 2: Press J Key
    KeyboardComponent key_resp_practice_JarSelection
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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    ImageComponent jar2_3
      image [set every repeat] = $practice_Jar2
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent MarbleValues_3
      image = $valuepath 
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent check_task_3
      Code Type = Py
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      Before Experiment:
        import random
      Each Frame:
        if practice_task != "practice_JarSelection":
            marble_color = -1
            marble_points = 0
            continueRoutine = False
    CodeComponent keyresponse_time_3
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_practice_JarSelection.frameNStart = frameN  # exact frame index
        key_resp_practice_JarSelection.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            marble_color = 0
            continueRoutine = False
  Routine practice_sample_marble1
    CodeComponent random_marble_2
      Code Type = Py
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      Begin Experiment:
        #gainsTotal = 0
      Begin Routine:
        if (key_resp_practice_JarSelection.keys == 'j'): #left jar
            marble_color = random.choice(practice_Jar2_Colors)
        elif (key_resp_practice_JarSelection.keys== 'f'): #right jar
            marble_color = random.choice(practice_Jar1_Colors)
        else:
            #marble_color = -1
            marble_points = 0


        if marble_color == 'darkorange':
            #marble_points = 3
            marble_points = color_pts_dict['darkorange']
        if marble_color == 'green':
            #marble_points = 2
            marble_points = color_pts_dict['green']
        if marble_color == 'purple':
            #marble_points = 4
            marble_points = color_pts_dict['purple']

        #gainsTotal = gainsTotal + marble_points
        #thisExp.addData('Marble color', marble_color)
        #thisExp.addData('Marble points', marble_points)
      Each Frame:
        if practice_task != "practice_JarSelection":
            continueRoutine = False
    TextComponent print_marble_points_2
      letterHeight = 0.07
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $"You got " + str(marble_points) + " points"
    PolygonComponent marble_2
      fillColor [set every repeat] = $marble_color
      lineColor [set every repeat] = $marble_color
      pos = (0.00, 0.00)
      saveStartStop = False
      shape = circle
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine practice_ChangeDetection1
    ImageComponent jar1_4
      image [set every repeat] = $practice_Jar1
      pos = (-0.25, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Same_or_Different_2
      letterHeight = 0.07
      pos [set every repeat] = [practice_Jar3_text_position_X, practice_Jar3_text_position_Y]
      startVal [time (s)] = 3.0
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      text:
        Is this jar the same or different?

        Press
        'f' for SAME
        'j' for DIFFERENT
    KeyboardComponent key_resp_trials_2
      allowedKeys = 'f', 'j'
      correctAns = $practice_Change_Detection_Key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
      storeCorrect = True
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    ImageComponent jar2_4
      image [set every repeat] = $practice_Jar2
      pos = (0.45, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent changedetection_2
      image [set every repeat] = $practice_Jar3
      pos [set every repeat] = [practice_Jar3_position_X, practice_Jar3_position_Y]
      size = (0.5, 0.5)
      startVal [time (s)] = 3
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    TextComponent blankscreen_2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    CodeComponent check_task_5
      Code Type = Py
      Each Frame:
        if practice_task != "practice_ChangeDetection":
            continueRoutine = False
    ImageComponent MarbleValues_4
      image = $valuepath 
      pos = (0, 0.35)
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent keyresponse_time_4
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials_2.frameNStart = frameN  # exact frame index
        key_resp_trials_2.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            continueRoutine = False
  Routine practice_change_feedback1
    CodeComponent feedback_2
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.

        if (key_resp_trials_2.keys == 'f') or (key_resp_trials_2.keys == 'j'):
            if key_resp_trials_2.corr:
                fb_text = 'Correct! You got 2 points.'
                #gainsTotal += 1
                fb_col = 'green'
            else:
                fb_text = 'Incorrect. You got 0 points.'
                fb_col = 'white'
                #gainsTotal += 0
        else:
            fb_text = 'You did not answer in time. You got 0 points.'
            fb_col = 'black'
            #gainsTotal += 0
      Each Frame:
        if practice_task != "practice_ChangeDetection":
            continueRoutine = False
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $fb_text
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  Routine ready_to_begin1
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ready to begin the experiment? Scores from these trials will be collected.


        Press the space bar to begin.
    KeyboardComponent key_resp_ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_sample_marble1
    CodeComponent random_marble
      Code Type = Py
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      Begin Experiment:
        gainsTotal = 0
      Begin Routine:
        if (key_resp_trials_JarSelection.keys == 'j'): #left jar
            marble_color = random.choice(Jar2_Colors)
        elif (key_resp_trials_JarSelection.keys== 'f'): #right jar
            marble_color = random.choice(Jar1_Colors)
        else:
            #marble_color = -1
            marble_points = 0



        if marble_color == 'darkorange':
            #marble_points = 3
            marble_points = color_pts_dict['darkorange']
        if marble_color == 'green':
            #marble_points = 2
            marble_points = color_pts_dict['green']
        if marble_color == 'purple':
            #marble_points = 4
            marble_points = color_pts_dict['purple']

        gainsTotal = gainsTotal + marble_points
        thisExp.addData('Marble color', marble_color)
        thisExp.addData('Marble points', marble_points)
      Each Frame:
        if task != "task_JarSelection":
            continueRoutine = False
      End Routine:
        #update total points
        #gainsRound = gainsRound + color_pts_dict[marble_color]
        #gainsTotal.append(points)
    TextComponent print_marble_points
      letterHeight = 0.07
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $"You got " + str(marble_points) + " points"
    PolygonComponent marble
      fillColor [set every repeat] = $marble_color
      lineColor [set every repeat] = $marble_color
      pos = (0.00, 0.00)
      saveStartStop = False
      shape = circle
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine trials_ChangeDetection1
    ImageComponent jar1_2
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Same_or_Different
      letterHeight = 0.07
      pos [set every repeat] = [Jar3_text_position_X, Jar3_text_position_Y]
      saveStartStop = False
      startVal [time (s)] = 3.0
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      text:
        Is this jar the same or different?

        Press
        'f' for SAME
        'j' for DIFFERENT
    KeyboardComponent key_resp_trials
      allowedKeys = 'f', 'j'
      correctAns = $Change_Detection_Key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.0
      storeCorrect = True
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    ImageComponent jar2_2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent changedetection
      image [set every repeat] = $Jar3
      pos [set every repeat] = [Jar3_position_X, Jar3_position_Y]
      size = (0.5, 0.5)
      startVal [time (s)] = 3
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    TextComponent blankscreen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    CodeComponent check_task_2
      Code Type = Py
      Each Frame:
        if task != "task_ChangeDetection":
            continueRoutine = False
    ImageComponent MarbleValues_2
      image = $valuepath 
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent keyresponse_time
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials.frameNStart = frameN  # exact frame index
        key_resp_trials.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            marble_points = 0
            continueRoutine = False
  Routine trials_JarSelection1
    ImageComponent jar1
      image [set every repeat] = $Jar1
      pos = (-0.25, -0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3
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      text:
        JAR SELECTION TASK
        Choose a jar of marbles

        Jar 1: Press F Key
        Jar 2: Press J Key
    KeyboardComponent key_resp_trials_JarSelection
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      storeCorrect = True
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    ImageComponent jar2
      image [set every repeat] = $Jar2
      pos = (0.45, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent MarbleValues
      image = $valuepath 
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.525, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent check_task
      Code Type = Py
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      Each Frame:
        if task != "task_JarSelection":
            marble_color = -1
            marble_points = 0
            continueRoutine = False
    CodeComponent keyresponse_time_2
      Code Type = Py
      Each Frame:
        threshold = 6 #number of seconds allowed
        key_resp_trials.frameNStart = frameN  # exact frame index
        key_resp_trials.tStart = t  # local t and not account for scr refresh
        if t > threshold:
            marble_color = 0
            continueRoutine = False
  Routine trials_Feedback_ChangeDetection1
    CodeComponent feedback
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.

        if (key_resp_trials.keys == 'f') or (key_resp_trials.keys == 'j'):
            if key_resp_trials.corr:
                fb_text = 'Correct! You got 2 points.'
                gainsTotal += 1
                fb_col = 'green'
            else:
                fb_text = 'Incorrect. You got 0 points.'
                fb_col = 'white'
                gainsTotal += 0
        else:
            fb_text = 'You did not answer in time. You got 0 points.'
            fb_col = 'black'
            gainsTotal += 0
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $fb_text
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    CodeComponent check_task_4
      Code Type = Py
      Each Frame:
        if task != "task_ChangeDetection":
            continueRoutine = False
  Routine Break
    CodeComponent break_code
      Code Type = Py
      Begin Routine:
        if which_task.thisN != 149:
            #will break after 150th trial
            continueRoutine = False


            #after space bar is pressed, will continue where left off
    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Time for a 4 minute break!
        Your HRV will now be measured.

        Please press the space bar when the break is over to continue the task.
    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sum_marble_pts
    CodeComponent sum_code
      Code Type = Py
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      Begin Routine:
        orange1 = list(Jar1_Colors).count('darkorange') * color_pts_dict['darkorange']
        green1 = list(Jar1_Colors).count('green') * color_pts_dict['green']
        purple1 = list(Jar1_Colors).count('purple') * color_pts_dict['purple']

        jar1_totalpoints = orange1 + green1 + purple1
        thisExp.addData('marbleJar1_SumOfPoints', jar1_totalpoints)

        orange2 = list(Jar2_Colors).count('darkorange') * color_pts_dict['darkorange']
        green2 = list(Jar2_Colors).count('green') * color_pts_dict['green']
        purple2 = list(Jar2_Colors).count('purple') * color_pts_dict['purple']

        jar2_totalpoints = orange2 + green2 + purple2
        thisExp.addData('marbleJar2_SumOfPoints', jar2_totalpoints)

        orange3 = list(Jar3_Colors).count('darkorange') * color_pts_dict['darkorange']
        green3 = list(Jar3_Colors).count('green') * color_pts_dict['green']
        purple3 = list(Jar3_Colors).count('purple') * color_pts_dict['purple']

        jar3_totalpoints = orange3 + green3 + purple3
        thisExp.addData('marbleJar3_SumOfPoints', jar3_totalpoints)
  Routine total_pts1
    TextComponent both_tasks_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Congrats on completing the Marble Jar Task! You got " + str(gainsTotal) + " points!"
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    CodeComponent TOTAL_POINTS
      Code Type = Py
      Begin Routine:
        thisExp.addData('TOTAL POINTS', gainsTotal)
    KeyboardComponent key_resp_endofexperiment
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine sum_marble_pts_2
    CodeComponent sum_code_2
      Code Type = Py
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      Begin Routine:
        orange1 = Jar1_Colors.count('darkorange') * color_pts_dict['darkorange']
        green1 = Jar1_Colors.count('green') * color_pts_dict['green']
        purple1 = Jar1_Colors.count('purple') * color_pts_dict['purple']

        jar1_totalpoints = orange1 + green1 + purple1
        thisExp.addData('marbleJar1_SumOfPoints', jar1_totalpoints)

        orange2 = Jar2_Colors.count('darkorange') * color_pts_dict['darkorange']
        green2 = Jar2_Colors.count('green') * color_pts_dict['green']
        purple2 = Jar2_Colors.count('purple') * color_pts_dict['purple']

        jar2_totalpoints = orange2 + green2 + purple2
        thisExp.addData('marbleJar2_SumOfPoints', jar2_totalpoints)

        orange3 = Jar3_Colors.count('darkorange') * color_pts_dict['darkorange']
        green3 = Jar3_Colors.count('green') * color_pts_dict['green']
        purple3 = Jar3_Colors.count('purple') * color_pts_dict['purple']

        jar3_totalpoints = orange3 + green3 + purple3
        thisExp.addData('marbleJar3_SumOfPoints', jar3_totalpoints)
Flow
  Routine exp_name3
  Routine color_pts
  Routine value_path
  Routine Instructions_1
  Routine practice_instructions1
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice_orange_purple_green.xlsx
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'practice_Jar1': './Stimuli/practice/practice_marblejar_0.jpg', 'practice_Jar1_Colors': ['darkorange', 'purple', 'darkorange', 'purple', 'green', 'purple', 'darkorange', 'darkorange', 'purple'], 'practice_Jar2': './Stimuli/practice/practice_marblejar_1.jpg', 'practice_Jar2_Colors': ['darkorange', 'purple', 'darkorange', 'darkorange', 'darkorange', 'purple', 'purple', 'purple', 'darkorange'], 'practice_Jar3_right_or_left': 'right', 'practice_Jar3_text_position_X': -0.25, 'practice_Jar3_text_position_Y': 0, 'practice_Jar3_position_X': 0.5, 'practice_Jar3_position_Y': 0, 'practice_Jar3': './Sti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,
      {'practice_Jar1': './Stimuli/practice/practice_marblejar_4.jpg', 'practice_Jar1_Colors': ['darkorange', 'purple', 'darkorange', 'green', 'green', 'purple', 'darkorange', 'purple', 'purple'], 'practice_Jar2': './Stimuli/practice/practice_marblejar_5.jpg', 'practice_Jar2_Colors': ['green', 'darkorange', 'purple', 'purple', 'green', 'green', 'darkorange', 'darkorange', 'purple'], 'practice_Jar3_right_or_left': 'right', 'practice_Jar3_text_position_X': -0.25, 'practice_Jar3_text_position_Y': 0, 'practice_Jar3_position_X': 0.5, 'practice_Jar3_position_Y': 0, 'practice_Jar3': './Stimuli/practice/pra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,
      {'practice_Jar1': './Stimuli/practice/practice_marblejar_7.jpg', 'practice_Jar1_Colors': ['purple', 'green', 'green', 'purple', 'purple', 'darkorange', 'darkorange', 'darkorange', 'darkorange'], 'practice_Jar2': './Stimuli/practice/practice_marblejar_8.jpg', 'practice_Jar2_Colors': ['darkorange', 'purple', 'darkorange', 'darkorange', 'darkorange', 'darkorange', 'darkorange', 'purple', 'purple'], 'practice_Jar3_right_or_left': 'right', 'practice_Jar3_text_position_X': -0.25, 'practice_Jar3_text_position_Y': 0, 'practice_Jar3_position_X': 0.5, 'practice_Jar3_position_Y': 0, 'practice_Jar3': './S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,
      {'practice_Jar1': './Stimuli/practice/practice_marblejar_9.jpg', 'practice_Jar1_Colors': ['purple', 'purple', 'green', 'purple', 'purple', 'purple', 'darkorange', 'purple', 'green'], 'practice_Jar2': './Stimuli/practice/practice_marblejar_16.jpg', 'practice_Jar2_Colors': ['darkorange', 'green', 'darkorange', 'darkorange', 'darkorange', 'darkorange', 'green', 'darkorange', 'darkorange'], 'practice_Jar3_right_or_left': 'left', 'practice_Jar3_text_position_X': 0.25, 'practice_Jar3_text_position_Y': 0, 'practice_Jar3_position_X': -0.5, 'practice_Jar3_position_Y': 0, 'practice_Jar3': './Stimuli/pra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
    Routine practice_JarSelection1
    Routine practice_sample_marble1
    Routine practice_ChangeDetection1
    Routine practice_change_feedback1
  LoopTerminator practice_trials
  Routine ready_to_begin1
  LoopInitiator which_task loopType="TrialHandler"
    conditionsFile = Condition_File_orange_purple_green.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Jar1': './Stimuli/marblejar_29points0.jpg', 'Jar1_Colors': ['purple', 'purple', 'purple', 'purple', 'green', 'green', 'purple', 'green', 'darkorange'], 'Jar2': './Stimuli/marblejar_29points5.jpg', 'Jar2_Colors': ['green', 'green', 'darkorange', 'green', 'purple', 'purple', 'darkorange', 'purple', 'green'], 'Jar3_right_or_left': 'left', 'Jar3_text_position_X': 0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': -0.5, 'Jar3_position_Y': 0, 'Jar3': './Stimuli/marblejar_29points0.jpg', 'Jar3_Colors': ['purple', 'purple', 'purple', 'purple', 'green', 'green', 'purple', 'green', 'darkorange'], 's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,
      {'Jar1': './Stimuli/marblejar_29points1.jpg', 'Jar1_Colors': ['green', 'darkorange', 'green', 'green', 'purple', 'darkorange', 'green', 'purple', 'purple'], 'Jar2': './Stimuli/marblejar_29points6.jpg', 'Jar2_Colors': ['green', 'green', 'purple', 'green', 'darkorange', 'green', 'darkorange', 'purple', 'purple'], 'Jar3_right_or_left': 'left', 'Jar3_text_position_X': 0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': -0.5, 'Jar3_position_Y': 0, 'Jar3': './Stimuli/marblejar_29points1.jpg', 'Jar3_Colors': ['green', 'darkorange', 'green', 'green', 'purple', 'darkorange', 'green', 'purple', 'purple'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,
      {'Jar1': './Stimuli/marblejar_29points2.jpg', 'Jar1_Colors': ['purple', 'purple', 'green', 'purple', 'green', 'green', 'darkorange', 'purple', 'purple'], 'Jar2': './Stimuli/marblejar_29points7.jpg', 'Jar2_Colors': ['green', 'darkorange', 'green', 'green', 'darkorange', 'green', 'darkorange', 'green', 'purple'], 'Jar3_right_or_left': 'right', 'Jar3_text_position_X': -0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': 0.5, 'Jar3_position_Y': 0, 'Jar3': './Stimuli/marblejar_29points12.jpg', 'Jar3_Colors': ['green', 'purple', 'purple', 'green', 'purple', 'purple', 'purple', 'purple', 'purple'], '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,
      {'Jar1': './Stimuli/marblejar_29points3.jpg', 'Jar1_Colors': ['darkorange', 'darkorange', 'green', 'green', 'purple', 'green', 'purple', 'purple', 'green'], 'Jar2': './Stimuli/marblejar_29points8.jpg', 'Jar2_Colors': ['purple', 'darkorange', 'green', 'purple', 'purple', 'green', 'darkorange', 'green', 'green'], 'Jar3_right_or_left': 'right', 'Jar3_text_position_X': -0.25, 'Jar3_text_position_Y': 0, 'Jar3_position_X': 0.5, 'Jar3_position_Y': 0, 'Jar3': './Stimuli/marblejar_29points13.jpg', 'Jar3_Colors': ['green', 'green', 'darkorange', 'purple', 'purple', 'darkorange', 'green', 'purple', 'gree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
    Routine sum_marble_pts
    Routine trials_JarSelection1
    Routine trials_sample_marble1
    Routine trials_ChangeDetection1
    Routine trials_Feedback_ChangeDetection1
    Routine Break
  LoopTerminator which_task
  Routine total_pts1
